PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 001
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Routines
  Routine trial
    MouseComponent mouse
      clickable = image_1,image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name
      startVal [time (s)] = 0.2
      timeRelativeTo = routine
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    KeyboardComponent key_resp_1
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        import torch
        import ego
        from ego.stimulation.shape import random_gallery, acquisition_gallery, image_create_ellipse_fourier

        count_num= 1
        LOOP_NUM = 100
        RANDOM_NUM = 80

        bounds = torch.Tensor([[-1, -0.5, -0.25, -0.125, -1, -0.5, -0.25, -0.125],
                               [1, 0.5, 0.25, 0.125, 1, 0.5, 0.25, 0.125]])


        path1 = "001.jpg"
        path2 = "002.jpg"

        result = []
        response = []
      Begin Routine:
        if count_num <= RANDOM_NUM:
            gallery = random_gallery(bounds)
        else:
            gallery = acquisition_gallery(result, response, bounds)

        image_create_ellipse_fourier(path1, gallery[0], result)
        image_create_ellipse_fourier(path2, gallery[1], result)
      End Experiment:
        result = torch.Tensor(result).reshape(-1, len(bounds[0]))
        response = torch.Tensor(response).reshape(-1, 2)

        result_save_name = filename + '_result.pt'
        response_save_name = filename + '_response.pt'

        torch.save(result, result_save_name)
        torch.save(response, response_save_name)
      End Routine:
        if count_num <= LOOP_NUM:
            if key_resp_1.keys==None:
                if mouse.clicked_name==image_1:
                    response.append(len(result)-2)
                    response.append(len(result)-1)
                else:
                    response.append(len(result)-1)
                    response.append(len(result)-2)
            else:
                if key_resp_1.keys=='1':
                    response.append(len(result)-2)
                    response.append(len(result)-1)
                else:
                    response.append(len(result)-1)
                    response.append(len(result)-2)

        count_num+=1
    ImageComponent image_1
      image [set every repeat] = $path1
      pos = (-400, 0)
      size = (400, 400)
      startVal [time (s)] = 0.2
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $path2
      pos = (400, 0)
      size = (400, 400)
      startVal [time (s)] = 0.2
      units = pix
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    TextComponent text
      letterHeight = 20
      pos = (0, 450)
      startVal [time (s)] = 0.2
      text [set every repeat] = $count_num
      units = pix
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  Routine instruction
    TextComponent text_2
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = Spaceキーを押したら次へ進みます．
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = $LOOP_NUM
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    Routine trial
  LoopTerminator trials
